open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/1-12575715.tif");
selectWindow("1-12575715.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/1-12575715.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/106-16240073.tif");
selectWindow("106-16240073.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/106-16240073.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/109-16835669.tif");
selectWindow("109-16835669.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/109-16835669.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/112-15530485.tif");
selectWindow("112-15530485.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/112-15530485.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/118-12512299.tif");
selectWindow("118-12512299.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/118-12512299.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/120-14130171.tif");
selectWindow("120-14130171.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/120-14130171.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/124-16271251.tif");
selectWindow("124-16271251.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/124-16271251.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/126-14846474.tif");
selectWindow("126-14846474.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/126-14846474.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/129-L-10008855.tif");
selectWindow("129-L-10008855.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/129-L-10008855.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/138-12814277.tif");
selectWindow("138-12814277.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/138-12814277.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/139-15432182.tif");
selectWindow("139-15432182.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/139-15432182.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/140-15079397.tif");
selectWindow("140-15079397.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/140-15079397.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/142-15922802.tif");
selectWindow("142-15922802.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/142-15922802.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/144-12914070.tif");
selectWindow("144-12914070.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/144-12914070.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/146-12742728.tif");
selectWindow("146-12742728.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/146-12742728.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/147-12919255.tif");
selectWindow("147-12919255.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/147-12919255.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/148-12455803.tif");
selectWindow("148-12455803.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/148-12455803.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/150-13782776.tif");
selectWindow("150-13782776.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/150-13782776.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/153-16194984.tif");
selectWindow("153-16194984.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/153-16194984.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/155-L-11641608.tif");
selectWindow("155-L-11641608.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/155-L-11641608.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/155-R-11641605.tif");
selectWindow("155-R-11641605.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/155-R-11641605.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/157-12257308.tif");
selectWindow("157-12257308.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/157-12257308.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/16-17121694.tif");
selectWindow("16-17121694.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/16-17121694.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/17-13940220.tif");
selectWindow("17-13940220.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/17-13940220.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/22-16841121.tif");
selectWindow("22-16841121.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/22-16841121.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/23-12273776.tif");
selectWindow("23-12273776.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/23-12273776.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/25-10279355.tif");
selectWindow("25-10279355.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/25-10279355.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/27-13300471.tif");
selectWindow("27-13300471.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/27-13300471.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/29-15505754.tif");
selectWindow("29-15505754.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/29-15505754.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/30-17103573.tif");
selectWindow("30-17103573.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/30-17103573.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/35-16435096.tif");
selectWindow("35-16435096.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/35-16435096.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/36-16836167.tif");
selectWindow("36-16836167.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/36-16836167.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/38-11084079.tif");
selectWindow("38-11084079.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/38-11084079.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/4-13559066.tif");
selectWindow("4-13559066.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/4-13559066.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/40-12604950.tif");
selectWindow("40-12604950.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/40-12604950.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/42-16419929.tif");
selectWindow("42-16419929.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/42-16419929.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/43-14977133.tif");
selectWindow("43-14977133.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/43-14977133.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/44-12605764.tif");
selectWindow("44-12605764.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/44-12605764.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/45-14127130.tif");
selectWindow("45-14127130.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/45-14127130.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/5-13127344.tif");
selectWindow("5-13127344.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/5-13127344.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/50-16824256.tif");
selectWindow("50-16824256.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/50-16824256.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/55-13685427.tif");
selectWindow("55-13685427.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/55-13685427.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/65-17282038.tif");
selectWindow("65-17282038.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/65-17282038.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/66-12512839.tif");
selectWindow("66-12512839.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/66-12512839.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/68-9794650.tif");
selectWindow("68-9794650.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/68-9794650.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/69-13608018.tif");
selectWindow("69-13608018.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/69-13608018.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/70-15485325.tif");
selectWindow("70-15485325.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/70-15485325.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/74-L-12425714.tif");
selectWindow("74-L-12425714.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/74-L-12425714.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/74-R-17255826.tif");
selectWindow("74-R-17255826.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/74-R-17255826.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/80-11446561.tif");
selectWindow("80-11446561.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/80-11446561.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/81-L-16930705.tif");
selectWindow("81-L-16930705.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/81-L-16930705.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/81-R-16930708.tif");
selectWindow("81-R-16930708.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/81-R-16930708.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/85-13046758.tif");
selectWindow("85-13046758.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/85-13046758.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/88-10279242_S.tif");
selectWindow("88-10279242_S.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/88-10279242_S.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/89-R-15922707.tif");
selectWindow("89-R-15922707.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/89-R-15922707.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/9-13033838.tif");
selectWindow("9-13033838.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/9-13033838.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/92-13270535.tif");
selectWindow("92-13270535.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/92-13270535.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/93-15987213.tif");
selectWindow("93-15987213.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/93-15987213.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/94-13243377.tif");
selectWindow("94-13243377.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/94-13243377.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/95-15079923.tif");
selectWindow("95-15079923.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/95-15079923.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/96-16280760.tif");
selectWindow("96-16280760.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/96-16280760.txt");

open("C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/98-13835019.tif");
selectWindow("98-13835019.tif");
saveAs("XY Coordinates", "C:/Users/SimonsonLab/Desktop/Steps2Walk/Haglund/diseased/98-13835019.txt");

close("*");